PsychoPy2experiment version="2021.2.1"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[255,255,255]
  expName = arl-stroop
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down','up'
      correctAns = #correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent instructBar
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
          BLUE=UP
            RED=LEFT    YELLOW=DOWN    GREEN=RIGHT
  Routine Welcome
    TextComponent WelcomeText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the arrow that corresponds to the COLOR the word is written in.

        BLUE = UP
        YELLOW = DOWN
        RED = LEFT
        GREEN = RIGHT

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thank you!
        Press SPACE to close.
    KeyboardComponent endResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine results
Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = arl-conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'blue', 'colour': 'blue', 'congruent': 1.0, 'correctAns': 'up'},
      {'word': 'red', 'colour': 'pink', 'congruent': 0.0, 'correctAns': 'down'},
      {'word': 'green', 'colour': 'blue', 'congruent': 0.0, 'correctAns': 'up'},
      {'word': 'pink', 'colour': 'pink', 'congruent': 1.0, 'correctAns': 'down'},
      {'word': 'green', 'colour': 'green', 'congruent': 1.0, 'correctAns': 'right'},
      {'word': 'blue', 'colour': 'red', 'congruent': 0.0, 'correctAns': 'left'},
      {'word': 'red', 'colour': 'red', 'congruent': 1.0, 'correctAns': 'left'},
      {'word': 'blue', 'colour': 'green', 'congruent': 0.0, 'correctAns': 'right'},
      {'word': 'blue', 'colour': 'pink', 'congruent': 0.0, 'correctAns': 'down'},
      {'word': 'red', 'colour': 'green', 'congruent': 0.0, 'correctAns': 'right'},
      {'word': 'pink', 'colour': 'red', 'congruent': 0.0, 'correctAns': 'left'},
      {'word': 'green', 'colour': 'red', 'congruent': 0.0, 'correctAns': 'left'},
      {'word': 'green', 'colour': 'pink', 'congruent': 0.0, 'correctAns': 'down'},
      {'word': 'red', 'colour': 'blue', 'congruent': 0.0, 'correctAns': 'up'},
      {'word': 'pink', 'colour': 'blue', 'congruent': 0.0, 'correctAns': 'up'},
      {'word': 'pink', 'colour': 'green', 'congruent': 0.0, 'correctAns': 'right'}]
    Routine trial
  LoopTerminator trials
  Routine results
  Routine end
